PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Save log file = False
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1366, 768]
  expName = lab2_ldt
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Routines
  Routine trial
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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    TextComponent stimulus
      letterHeight = 0.1
      startVal [time (s)] = 1.5
      text [set every repeat] = $stim
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    KeyboardComponent response
      allowedKeys [set every repeat] = 'a','l'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 1.5
      store = first key
      storeCorrect = True
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  Routine instructions
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        You are going to see a series of word or word-like items presented to you one by one.

        Please decide as quickly as you can if the stimulus is a word of English, or not.

        If you think it IS an English word, please press 'a' on the keyboard.

        If you think it is NOT an English word, please press 'l' on the keyboard.

        Press the space bar to begin.
    KeyboardComponent begin_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'stim': 'WART', 'corrAns': 'l', 'condition': 'LOW'},
      {'stim': 'HOG', 'corrAns': 'l', 'condition': 'LOW'},
      {'stim': 'BELLY', 'corrAns': 'l', 'condition': 'HIGH'},
      {'stim': 'STAR', 'corrAns': 'l', 'condition': 'HIGH'},
      {'stim': 'HARF', 'corrAns': 'a', 'condition': 'NONWORD'},
      {'stim': 'TRGY', 'corrAns': 'a', 'condition': 'NONWORD'},
      {'stim': 'REXY', 'corrAns': 'a', 'condition': 'NONWORD'},
      {'stim': 'YRRL', 'corrAns': 'a', 'condition': 'NONWORD'}]
    Routine trial
  LoopTerminator trials
